PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  expName = first_test
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Routines
  Routine trial
    TextComponent trial_fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text = +
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    SoundComponent sound_stimulus
      sound [set every repeat] = $sound_name
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent lsl_send_marker
      Code Type = Py
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      Begin Routine:
        outlet.push_sample(x=[trigger_number])
        core.wait(0.005)
        outlet.push_sample(x=[0])
    KeyboardComponent response_key
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      storeCorrect = True
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  Routine intro
    TextComponent instruction_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Press space bar, when you hear the high pitched sound.
    KeyboardComponent go_button
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine outro
    TextComponent bye
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks an bye!
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  Routine lsl_setup
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes

        info = StreamInfo(name='TriggerStreamA', type='Markers', channel_count=1, channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine isi
    TextComponent isi_fixation_cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_number
      text = +
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Flow
  Routine lsl_setup
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('id_trial', 1), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.6), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 2), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.57), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 3), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.61), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 4), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.23), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 5), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.35), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 6), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.65), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 7), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.31), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 8), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.31), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 9), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.45), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 10), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.5), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 11), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.34), ('corrAns', 'space')]),
      OrderedDict([('id_trial', 12), ('sound_name', 'A'), ('trigger_number', 5), ('jitter_number', 0.34), ('corrAns', 'space')])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
    Routine trial
    Routine isi
  LoopTerminator trials
  Routine outro
